<PlusConfiguration version="2.3">

  <DataCollection StartupDelaySec="1.0" >
    <DeviceSet 
      Name="Brachytherapy Insertion with L14 Image 160920"
      Description="EM sensors: 1 Probe, 2 Chest, 3 Needle, 4 Guide." 
    />

    <Device
      Id="TrackerDevice" 
      Type="Ascension3DG" 
      AcquisitionRate="50" 
      LocalTimeOffsetSec="0.0" 
      FilterAcWideNotch="1"
      ToolReferenceFrame="Tracker">
      <DataSources>
        <DataSource Type="Tool" Id="Probe" BufferSize="500" PortName="0" AveragedItemsForFiltering="20" />
        <DataSource Type="Tool" Id="Chest" BufferSize="500" PortName="1" AveragedItemsForFiltering="20" />
        <DataSource Type="Tool" Id="Needle" BufferSize="500" PortName="2" AveragedItemsForFiltering="20" />
        <DataSource Type="Tool" Id="Guide" BufferSize="500" PortName="3" AveragedItemsForFiltering="20" />
      </DataSources>

      <OutputChannels>
        <OutputChannel Id="TrackerStream" >
          <DataSource Id="Probe"/>
          <DataSource Id="Chest"/>
          <DataSource Id="Needle"/>
          <DataSource Id="Guide"/>
        </OutputChannel>
      </OutputChannels>
    </Device>

    <Device
      Id="VideoDevice"
      Type="SonixVideo" 
      AcquisitionRate="30" 
      LocalTimeOffsetSec="0.0"
      IP="localhost" 
      Depth="50" 
      CompressionStatus="0"
      SoundVelocity="1500"
      AutoClipEnabled="TRUE"
      ImageToTransducerTransformName="ImageToTransducer">
      <DataSources>
        <DataSource
          Type="Video" Id="Video" PortName="B" PortUsImageOrientation="UF" BufferSize="500" AveragedItemsForFiltering="20"
          />
      </DataSources>

      <OutputChannels>
        <OutputChannel Id="VideoStream" VideoDataSourceId="Video"/>
      </OutputChannels>
    </Device>

    <Device 
      Id="TrackedVideoDevice" 
      Type="VirtualMixer" >
      <InputChannels>
        <InputChannel Id="TrackerStream" />
        <InputChannel Id="VideoStream" />
      </InputChannels>
      
      <OutputChannels>
        <OutputChannel Id="TrackedVideoStream"/>
      </OutputChannels>
    </Device>
    
    <Device
      Id="CaptureDevice"
      Type="VirtualDiscCapture"
      BaseFilename="RecordingTest.mha"
      EnableCapturing="FALSE" >
      <InputChannels>
        <InputChannel Id="TrackedVideoStream" />
      </InputChannels>
    </Device>

  </DataCollection>


  <PlusOpenIGTLinkServer
    MaxNumberOfIgtlMessagesToSend="10"
    MaxTimeSpentWithProcessingMs="50"
    ListeningPort="18944"
    SendValidTransformsOnly="true"
    OutputChannelId="TrackedVideoStream"
    >
    <DefaultClientInfo>
      <MessageTypes>
        <Message Type="IMAGE" />
        <Message Type="TRANSFORM" />
      </MessageTypes>
      <TransformNames>
        <Transform Name="GuideToNeedle" /> <!-- For calibrations -->
        <Transform Name="NeedleToGuide" />
        <Transform Name="GuideToChest" /> <!-- For renderings -->
        <Transform Name="NeedleToChest" />
        <Transform Name="ImageToProbe" />
        <Transform Name="ImageToTransducer" />
        <Transform Name="TransducerToProbe" />
      </TransformNames>
    <ImageNames>
      <Image Name="Image" EmbeddedTransformToFrame="Chest" />
    </ImageNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>


  <CoordinateDefinitions>
    
    <!-- Probe calibration using fCal -->
    <Transform From="ImageWater" To="Probe"
      Matrix="
        0.000168295    0.114386    0.00310439    42.6922
        -0.123113    -0.00144882    -0.00192203    43.077
        -0.00199745    -0.00301437    0.118726    18.1727
        0    0    0    1"
       Error="2.44141" Date="122815_160536" />
    <!-- Adjustment for speed of sound difference in water and plastic phantom -->
    <Transform From="ImageWater" To="Image"
      Matrix="
        1 0 0 0
        0 0.95 0 0
        0 0 1 0
        0 0 0 1"
       Error="2.44141" Date="122815_160536" />
       
  </CoordinateDefinitions> 


  <Rendering WorldCoordinateFrame="Reference">
    <DisplayableObject Type="Model" ObjectCoordinateFrame="TransducerOrigin" Id="ProbeModel"
      File="L14-5_38_ProbeModel.stl"
      ModelToObjectTransform="
        -1 0 0 29.7
        0 -1 0 1.5
        0 0 1 -14
        0 0 0 1"
    />
    <DisplayableObject Type="Model" ObjectCoordinateFrame="Reference" Id="Volume"/>
    <DisplayableObject Type="Model" ObjectCoordinateFrame="StylusTip" Id="StylusModel"
      File="Stylus_Example.stl"
      ModelToObjectTransform="
        1 0 0 -210.0
        0 1 0 0
        0 0 1 0
        0 0 0 1"
    />
    <DisplayableObject Id="PhantomModel" Type="Model" ObjectCoordinateFrame="Phantom"
      Opacity="0.6"
      File="FCal_2.0.stl"
      ModelToObjectTransform="
        1 0 0 -35.0
        0 1 0 -10.0
        0 0 1 -5.0
        0 0 0 1"
    />
    <DisplayableObject Type="Image" ObjectCoordinateFrame="Image" Id="LiveImage"/>
  </Rendering>


  <Segmentation
    ApproximateSpacingMmPerPixel="0.078"
    MorphologicalOpeningCircleRadiusMm="0.27"
    MorphologicalOpeningBarSizeMm="1.0"
    ClipRectangleOrigin="27 27" 
    ClipRectangleSize="766 562" 
    MaxLinePairDistanceErrorPercent="10"
    AngleToleranceDegrees="10"
    MaxAngleDifferenceDegrees="10"
    MinThetaDegrees="-70"
    MaxThetaDegrees="70"
    ThresholdImagePercent="10"
    CollinearPointsMaxDistanceFromLineMm="0.6"
    UseOriginalImageIntensityForDotIntensityScore="0"
  />


  <PhantomDefinition>
    <!-- Supported types are: Double-N, U-Shaped-N -->
    <Description
      Name="fCAL"
      Type="Double-N"
      Version="2.0"
      WiringVersion="2.0"
      Institution="Queen's University PerkLab"
    />

    <Geometry>
      <Pattern Type="NWire">
        <Wire Name="7:G1_g1" EndPointFront="30.0 0.0 20.0" EndPointBack="30.0 40.0 20.0" />
        <Wire Name="8:L1_h1" EndPointFront="55.0 0.0 20.0" EndPointBack="35.0 40.0 20.0" />
        <Wire Name="9:M1_m1" EndPointFront="60.0 0.0 20.0" EndPointBack="60.0 40.0 20.0" />
      </Pattern>
    <Pattern Type="NWire">
        <Wire Name="4:G3_g3" EndPointFront="30.0 0.0 10.0" EndPointBack="30.0 40.0 10.0" />
        <Wire Name="5:H3_l3" EndPointFront="35.0 0.0 10.0" EndPointBack="55.0 40.0 10.0" />
        <Wire Name="6:M3_m3" EndPointFront="60.0 0.0 10.0" EndPointBack="60.0 40.0 10.0" />
      </Pattern>
      <Pattern Type="NWire">
        <Wire Name="1:H5_h5" EndPointFront="35.0 0.0 0.0" EndPointBack="35.0 40.0 0.0" />
        <Wire Name="2:L5_i5" EndPointFront="55.0 0.0 0.0" EndPointBack="40.0 40.0 0.0" />
        <Wire Name="3:M5_m5" EndPointFront="60.0 0.0 0.0" EndPointBack="60.0 40.0 0.0" />
      </Pattern>

      <Landmarks>
        <Landmark Name="#1" Position="104.3 5.0 20.0" />
        <Landmark Name="#2" Position="104.3 45.0 20.0" />
        <Landmark Name="#3" Position="104.3 45.0 0.0" />
        <Landmark Name="#4" Position="104.3 -5.0 0.0" />
        
        <Landmark Name="#5" Position="-34.3 45.0 15.0" />
        <Landmark Name="#6" Position="-34.3 -5.0 20.0" />
        <Landmark Name="#7" Position="-34.3 -5.0 0.0" />
        <Landmark Name="#8" Position="-34.3 45.0 0.0" />
      </Landmarks>
      
    </Geometry>
  </PhantomDefinition>


  <VolumeReconstruction OutputSpacing="0.5 0.5 0.5"
    ClipRectangleOrigin="0 0" ClipRectangleSize="820 616"
    Interpolation="LINEAR" Optimization="FULL" Compounding="On" FillHoles="Off"
  />


  <fCal
    PhantomModelId="PhantomModel"
    ReconstructedVolumeId="Volume"
    TransducerModelId="ProbeModel"
    StylusModelId="StylusModel"
    ImageDisplayableObjectId="LiveImage"
    NumberOfCalibrationImagesToAcquire="200"
    NumberOfValidationImagesToAcquire="100"
    NumberOfStylusCalibrationPointsToAcquire="200"
    RecordingIntervalMs="100"
    MaxTimeSpentWithProcessingMs="70"
    ImageCoordinateFrame="Image"
    ProbeCoordinateFrame="Probe"
    ReferenceCoordinateFrame="Reference"
    TransducerOriginCoordinateFrame="TransducerOrigin"
    TransducerOriginPixelCoordinateFrame="TransducerOriginPixel"
    TemporalCalibrationDurationSec="10" 
    DefaultSelectedChannelId="TrackedVideoStream" 
  />


  <vtkPivotCalibrationAlgo
    ObjectMarkerCoordinateFrame="Stylus"
    ReferenceCoordinateFrame="Reference"
    ObjectPivotPointCoordinateFrame="StylusTip"
  />


  <vtkPhantomRegistrationAlgo
    PhantomCoordinateFrame="Phantom"
    ReferenceCoordinateFrame="Reference"
    StylusTipCoordinateFrame="StylusTip"
  />


  <vtkProbeCalibrationAlgo
    ImageCoordinateFrame="Image"
    ProbeCoordinateFrame="Probe"
    PhantomCoordinateFrame="Phantom"
    ReferenceCoordinateFrame="Reference"
  />

</PlusConfiguration>